CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:407
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Tau_DG
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    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
UnmixColors:[module_num:5|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
    Stain count:2
    Select the input color image:Tau_DG
    Name the output image:Purple_DG
    Stain:Hematoxylin
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    Name the output image:Brown_DG
    Stain:AEC
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
MeasureImageIntensity:[module_num:6|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
    Select images to measure:Brown_DG, Purple_DG
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
ImageMath:[module_num:7|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Brown_DG_Maximum
    Image or measurement?:Image
    Select the first image:Brown_DG
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.5
    Measurement:Intensity_MeanIntensity_Brown_DG

ImageMath:[module_num:8|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Purple_DG_Maximum
    Image or measurement?:Image
    Select the first image:Purple_DG
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:2
    Measurement:Intensity_MeanIntensity_Purple_DG

IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:Purple_DG_Maximum
    Name the primary objects to be identified:Nuclei_DG
    Typical diameter of objects, in pixel units (Min,Max):20,90
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.5
    Threshold correction factor:0.005
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:Brown_DG_Maximum
    Name the primary objects to be identified:NFTs_DG
    Typical diameter of objects, in pixel units (Min,Max):20,90
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:0
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.3
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.2,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
CombineObjects:[module_num:11|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
    Select initial object set:Nuclei_DG
    Select object set to combine:NFTs_DG
    Select how to handle overlapping objects:Merge
    Name the combined object set:AllNeurons

ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|Desktop
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|ModuleError_03NamesAndTypes,Image|ModuleError_01Images,Image|ModuleError_05UnmixColors,Image|ModuleError_07ImageMath,Image|ModuleError_06MeasureImageIntensity,Image|ModuleError_04Groups,Image|ModuleError_02Metadata,Image|ModuleError_08ImageMath,Image|Height_Tau_DG,Image|ExecutionTime_08ImageMath,Image|ExecutionTime_06MeasureImageIntensity,Image|ExecutionTime_01Images,Image|ExecutionTime_02Metadata,Image|ExecutionTime_04Groups,Image|ExecutionTime_03NamesAndTypes,Image|ExecutionTime_05UnmixColors,Image|ExecutionTime_07ImageMath,Image|Intensity_MaxIntensity_Brown_DG,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:CellProfiler_Tau_Quant_DG
    Overwrite existing files without warning?:No
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